# Generated by OpenSesame 2.9.7 (Hesitant Heisenberg)
# Sun Nov 27 12:35:17 2016 (posix)
# <http://www.cogsci.nl/opensesame>

set background "black"
set bidi "no"
set canvas_backend "xpyriment"
set compensation "0"
set coordinates "relative"
set description "Default description"
set font_bold "no"
set font_family "mono"
set font_italic "no"
set font_size "18"
set foreground "white"
set height "768"
set keyboard_backend "legacy"
set mouse_backend "xpyriment"
set sampler_backend "legacy"
set start "experiment"
set subject_nr "0"
set subject_parity "even"
set synth_backend "legacy"
set title "Basic timing"
set width "1024"

define form_text_render Intromessage
	set cols "1;1;1"
	__form_text__
	This is the timeout test.
	Please press space when you are ready
	__end__
	set margins "50;100;50;100"
	set only_render "yes"
	set rows "1"
	widget 0 0 3 1 label center="no" text="[form_text]"


define advanced_delay delay
	set duration "[delaylenght]"
	set jitter "0"
	set jitter_mode "Uniform"

define form_text_render empty
	set cols "1;1;1"
	set form_text ""
	set margins "50;100;50;100"
	set only_render "yes"
	set rows "1"
	widget 0 0 3 1 label center="no" text="[form_text]"


define sequence experiment
	run Intromessage "always"
	run space_response "always"
	run empty "always"
	run loop "always"
	run outromessage "always"
	run space_response "always"

define logger logger
	set auto_log "no"
	set ignore_missing "yes"
	set use_quotes "no"
	log "delay_delay"
	log "delaylenght"

define loop loop
	set break_if "never"
	set column_order "delaylenght"
	set cycles "3"
	set item "trial"
	set order "sequential"
	set repeat "100"
	setcycle 0 delaylenght "50"
	setcycle 1 delaylenght "150"
	setcycle 2 delaylenght "300"
	run trial

define form_text_render outromessage
	set cols "1;1;1"
	__form_text__
	Session complete
	Click space to end the session
	__end__
	set margins "50;100;50;100"
	set only_render "yes"
	set rows "1"
	widget 0 0 3 1 label center="no" text="[form_text]"


define keyboard_response space_response
	set allowed_responses "SPACE"
	set flush "yes"
	set timeout "infinite"

define sequence trial
	run delay "always"
	run logger "always"

